PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = visual search - shriti
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent target
      letterHeight = 0.1
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      text = T
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if random() > 0.5:
            num_distr = 10
            thisExp.addData('num_distr', num_distr)
        else:
            num_distr = 5
            thisExp.addData('num_distr', num_distr)
        distractors = []

        for i in range(num_distr):

            distr = visual.TextStim(win=win, name='distr',
                text='L',
                font='Open Sans',
                pos=(random()-0.5, random()-0.5), height=0.1, wrapWidth=None, ori=randint(0,360),
                color='white', colorSpace='rgb', opacity=None,
                languageStyle='LTR',
                depth=0.0);

            distractors.append(distr)


        for distr in distractors:
            distr.setAutoDraw(True)

        mouse.setVisible(True)  # keep cursor visible
      End Routine:
        for distr in distractors:
            distr.setAutoDraw(False)

        if mouse.time:  # if there was a click
            thisExp.addData('mouse_rt', mouse.time[0])  # first click only
    MouseComponent mouse
      clickable = target
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 200
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    Routine trial
  LoopTerminator trials
